proc celldef() {
  topol()
  subsets()
  geom()
  biophys()
  geom_nseg()
}

ndend=56
create soma, apic, dend_0[ndend]

proc topol() { local i
  connect apic(0), soma(0.5)
  for i = 0, 1 connect dend_0[i](0), apic(1)
  for i = 2, 3 connect dend_0[i](0), dend_0[1](1)
  for i = 4, 5 connect dend_0[i](0), dend_0[i-2](1)
  connect dend_0[6](0), dend_0[3](1)
  for i = 7, 8 connect dend_0[i](0), dend_0[5](1)
  for i = 9, 10 connect dend_0[i](0), dend_0[6](1)
  for i = 11, 12 connect dend_0[i](0), dend_0[8](1)
  for i = 13, 14 connect dend_0[i](0), dend_0[10](1)
  for i = 15, 16 connect dend_0[i](0), dend_0[i-4](1)
  connect dend_0[17](0), dend_0[12](1)
  for i = 18, 19 connect dend_0[i](0), dend_0[14](1)
  connect dend_0[20](0), dend_0[15](1)
  for i = 21, 22 connect dend_0[i](0), dend_0[17](1)
  connect dend_0[23](0), dend_0[19](1)
  for i = 24, 25 connect dend_0[i](0), dend_0[21](1)
  for i = 26, 27 connect dend_0[i](0), dend_0[22](1)
  for i = 28, 29 connect dend_0[i](0), dend_0[23](1)
  for i = 30, 31 connect dend_0[i](0), dend_0[25](1)
  for i = 32, 33 connect dend_0[i](0), dend_0[27](1)
  for i = 34, 35 connect dend_0[i](0), dend_0[i-6](1)
  for i = 36, 37 connect dend_0[i](0), dend_0[i-7](1)
  connect dend_0[38](0), dend_0[30](1)
  for i = 39, 40 connect dend_0[i](0), dend_0[i-7](1)
  for i = 41, 42 connect dend_0[i](0), dend_0[36](1)
  for i = 43, 44 connect dend_0[i](0), dend_0[37](1)
  for i = 45, 46 connect dend_0[i](0), dend_0[40](1)
  connect dend_0[47](0), dend_0[41](1)
  for i = 48, 49 connect dend_0[i](0), dend_0[45](1)
  for i = 50, 51 connect dend_0[i](0), dend_0[46](1)
  for i = 52, 53 connect dend_0[i](0), dend_0[49](1)
  for i = 54, 55 connect dend_0[i](0), dend_0[i-4](1)
  basic_shape()
}
proc shape3d_1() {

  soma {pt3dclear()
	pt3dadd(216.667, 254.545, 0, 0)
	pt3dadd(206.061, 243.939, 0, 0)
  }

  apic {pt3dclear()
	pt3dstyle(1, 211.364, 249.242, 0)
	pt3dadd(211.364, 249.242, 0, 0)
	pt3dadd(210.985, 248.864, 0, 0)
	pt3dadd(210.606, 248.485, 0, 0)
	pt3dadd(210.227, 248.106, 0, 0)
	pt3dadd(209.848, 247.727, 0, 0)
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  }
}
proc shape3d_2() {
  dend_0 {	pt3dadd(173.485, 190.151, 0, 0)
	pt3dadd(173.485, 189.773, 0, 0)
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  }
}
proc shape3d_3() {
  dend_0[7] {	pt3dadd(156.439, 225, 0, 0)
	pt3dadd(156.061, 225, 0, 0)
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  }
}
proc shape3d_4() {
  dend_0[8] {	pt3dadd(172.348, 221.212, 0, 0)
	pt3dadd(171.97, 220.833, 0, 0)
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  }
}
proc shape3d_5() {
  dend_0[13] {	pt3dadd(166.288, 229.167, 0, 0)
	pt3dadd(165.909, 229.167, 0, 0)
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  }
}
proc shape3d_6() {
  dend_0[15] {	pt3dadd(82.9545, 159.091, 0, 0)
	pt3dadd(82.5757, 158.712, 0, 0)
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  }
}
proc shape3d_7() {
  dend_0[21] {	pt3dadd(154.924, 183.712, 0, 0)
	pt3dadd(154.924, 183.333, 0, 0)
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  }
}
proc shape3d_8() {
  dend_0[25] {  }
  dend_0[26] {pt3dclear()
	pt3dadd(138.258, 181.061, 0, 0)
	pt3dadd(138.258, 181.061, 0, 0)
	pt3dadd(137.879, 181.061, 0, 0)
	pt3dadd(137.5, 181.439, 0, 0)
	pt3dadd(137.121, 181.818, 0, 0)
	pt3dadd(136.742, 181.818, 0, 0)
	pt3dadd(136.364, 181.818, 0, 0)
	pt3dadd(135.985, 181.818, 0, 0)
	pt3dadd(135.606, 181.818, 0, 0)
	pt3dadd(135.227, 181.818, 0, 0)
	pt3dadd(134.848, 182.197, 0, 0)
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  }
}
proc shape3d_9() {
  dend_0[30] {	pt3dadd(131.061, 158.712, 0, 0)
	pt3dadd(130.682, 158.712, 0, 0)
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  }
}
proc shape3d_10() {
  dend_0[32] {	pt3dadd(108.333, 145.455, 0, 0)
	pt3dadd(107.955, 145.076, 0, 0)
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  }
}
proc shape3d_11() {
  dend_0[38] {	pt3dadd(98.106, 127.273, 0, 0)
	pt3dadd(98.106, 126.894, 0, 0)
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  }
}
proc shape3d_12() {
  dend_0[40] {	pt3dadd(111.364, 165.151, 0, 0)
	pt3dadd(110.985, 165.151, 0, 0)
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  }
}
proc shape3d_13() {
  dend_0[42] {	pt3dadd(77.6515, 192.424, 0, 0)
	pt3dadd(77.2727, 192.803, 0, 0)
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  }
}
proc shape3d_14() {
  dend_0[49] {	pt3dadd(80.6818, 145.833, 0, 0)
	pt3dadd(80.303, 145.455, 0, 0)
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  }
}
proc shape3d_15() {
  dend_0[53] {	pt3dadd(62.5, 137.121, 0, 0)
	pt3dadd(62.1212, 136.742, 0, 0)
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  }
}
proc basic_shape() {
  shape3d_1()
  shape3d_2()
  shape3d_3()
  shape3d_4()
  shape3d_5()
  shape3d_6()
  shape3d_7()
  shape3d_8()
  shape3d_9()
  shape3d_10()
  shape3d_11()
  shape3d_12()
  shape3d_13()
  shape3d_14()
  shape3d_15()
}

objref all, somatic, apical, dendritic
proc subsets() { local i
  objref all
  all = new SectionList()
    soma all.append()
    apic all.append()
    for i=0, ndend-1 { 
          dend_0[i] all.append()
    }
}

  somatic = new SectionList()
    soma somatic.append()

  apical = new SectionList()
    apic apical.append()

  dendritic = new SectionList()
      for i=0, ndend-1{
        dend_0[i] dendritic.append()
      }


proc geom() {
  soma {  L = 15 diam = 15  nseg = 1}
  apic { diam = 2  nseg = 9}
  for i=0, ndend-1 {
    dend_0[i] { diam = 0.36  nseg = 9}
  }
}

proc geom_nseg() {
}

proc biophys() {
  forsec all {
    cm = 1
    Ra = 35.4
    insert cldif_CA3_NKCC1_HCO3
      cli0_cldif_CA3_NKCC1_HCO3 = 10
      clo0_cldif_CA3_NKCC1_HCO3 = 133.5
      cli_cldif_CA3_NKCC1_HCO3=10
      clo_cldif_CA3_NKCC1_HCO3=133.5
      cli_Start_cldif_CA3_NKCC1_HCO3 = 10

      hco3i0_cldif_CA3_NKCC1_HCO3 = 14.1
      hco3o0_cldif_CA3_NKCC1_HCO3 = 24
      hco3i_cldif_CA3_NKCC1_HCO3=14.1
      hco3o_cldif_CA3_NKCC1_HCO3=24
      hco3i_Start_cldif_CA3_NKCC1_HCO3 = 14.1

      celsius = 31

  }

  forsec somatic {
     insert VDpas
        gmax_VDpas = 0.0047  
        gmin_VDpas = 0.00060  
        e50_VDpas = -30
        s_VDpas = -6
        f_VDpas = 0.096 
  }

  forsec apical {
     insert VDpas
        gmax_VDpas = 0.0047  
        gmin_VDpas = 0.00060  
        e50_VDpas = -30
        s_VDpas = -6
        f_VDpas = 0.096 
  }

  forsec dendritic {
      insert VDpas
        gmax_VDpas = 0.0047  
        gmin_VDpas = 0.00060  
        e50_VDpas = -30
        s_VDpas = -6
        f_VDpas = 0.096 
  }
}

access soma

celldef()

//define ionic concentrations
cli0_cl_ion = cli0_cldif_CA3_NKCC1_HCO3
clo0_cl_ion = clo0_cldif_CA3_NKCC1_HCO3
hco3i0_hco3_ion = hco3i0_cldif_CA3_NKCC1_HCO3
hco3o0_hco3_ion = hco3o0_cldif_CA3_NKCC1_HCO3



